PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = main_fnirs
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Routines
  Routine welcome
    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        Welcome!

        You should have the two objects in your hands. Get confortable and pay attention. You can stop the experiment at any point by calling the operator.

        Please read carefully the following instructions.
  Routine instructions
    TextComponent inst_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        When text appears, continuously press the ball of the hand indicated by the text.

        If you see "right", press with your right hand.
        If you see "left", press with your left hand.
  Routine trial
    TextComponent trial_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $Text
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    KeyboardComponent next
      allowedKeys = 'n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
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  Routine end
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text:
        That's it!

        Thank you for participating!
        The operator will be with you in a moment.
  Routine fix
    PolygonComponent cross
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine welcome
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.csv
    loopType = random
    nReps = 40
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    conditions:
      [OrderedDict([('Text', 'Right'), ('Marker', 'R')]),
      OrderedDict([('Text', 'Left'), ('Marker', 'L')])]
    Routine fix
    Routine trial
  LoopTerminator trials
  Routine end
